opentrons/protocol-designer 8.4.4
schemaVersion: 8
protocolName: Emulsifying Tests
author: S Devlin
description: Test to see droplet size based on different mix variables
robot: {model: OT-2 Standard, deckId: ot2_standard}
pipettes:
  p20_single_gen2: {mount: left}
labware:
  Opentrons OT-2 96 Tip Rack 20 µL: {labwareDefURI: opentrons/opentrons_96_tiprack_20ul/1, location: 2}
  Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical: {labwareDefURI: opentrons/opentrons_10_tuberack_falcon_4x50ml_6x15ml_conical/1, location: 1}
  Bio-Rad 384 Well Plate 50 µL: {labwareDefURI: opentrons/biorad_384_wellplate_50ul/2, location: 4}
trashBinLocationUpdate:
  trashBin: cutout12
pipetteTiprackAssignments:
  p20_single_gen2: [opentrons/opentrons_96_tiprack_20ul/1]
ingredients:
  - Oil: {description: Standard LIght Oil}
  - Water
ingredLocations:
  Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical:
    Oil {volume: 600}: A1
    Water {volume: 100}: A2
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 20
  path: single
  changeTip: once
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A1
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: C3, G3, K3, O3, E5, I5, M5, C7, G7, K7, O7, E9, I9, M9, C11, G11, K11, O11, E13, I13, M13, C15, G15, K15, O15, E17, I17, M17
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: C3
  dispense_flowRate: 5
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: G3
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: K3
  dispense_flowRate: 15
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: O3
  dispense_flowRate: 5
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: E5
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: I5
  dispense_flowRate: 15
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: M5
  dispense_flowRate: 5
  dispense_mix_checkbox: true
  dispense_mix_times: 15
  dispense_mix_volume: 5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: C7
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 15
  dispense_mix_volume: 5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: G7
  dispense_flowRate: 15
  dispense_mix_checkbox: true
  dispense_mix_times: 15
  dispense_mix_volume: 5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: K7
  dispense_flowRate: 5
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 10
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: O7
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 10
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: E9
  dispense_flowRate: 15
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 10
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: I9
  dispense_flowRate: 5
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 10
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: M9
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 10
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: C11
  dispense_flowRate: 15
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 10
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: G11
  dispense_flowRate: 5
  dispense_mix_checkbox: true
  dispense_mix_times: 15
  dispense_mix_volume: 10
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: K11
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 15
  dispense_mix_volume: 10
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: O11
  dispense_flowRate: 15
  dispense_mix_checkbox: true
  dispense_mix_times: 15
  dispense_mix_volume: 10
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: E13
  dispense_flowRate: 5
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 15
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: I13
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 15
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: M13
  dispense_flowRate: 15
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 15
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: C15
  dispense_flowRate: 5
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 15
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: G15
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 15
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: K15
  dispense_flowRate: 15
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 15
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: O15
  dispense_flowRate: 5
  dispense_mix_checkbox: true
  dispense_mix_times: 15
  dispense_mix_volume: 15
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: E17
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 15
  dispense_mix_volume: 15
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 3.7
  aspirate_mmFromBottom: 2
  dispense_labware: Bio-Rad 384 Well Plate 50 µL
  dispense_wells: I17
  dispense_flowRate: 15
  dispense_mix_checkbox: true
  dispense_mix_times: 15
  dispense_mix_volume: 15
  dropTip_location: trashBin
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons OT-2 96 Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 20, labwareId: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical, wellName: A1, wellLocation: {origin: bottom, offset: {z: 2, x: 0, y: 0}}, flowRate: 3.7}
- dispense: {pipetteId: p20_single_gen2, volume: 20, labwareId: Bio-Rad 384 Well Plate 50 µL, wellName: C3, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 3.78}
- aspirate: {pipetteId: p20_single_gen2, volume: 20, labwareId: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical, wellName: A1, wellLocation: {origin: bottom, offset: {z: 2, x: 0, y: 0}}, flowRate: 3.7}
- dispense: {pipetteId: p20_single_gen2, volume: 20, labwareId: Bio-Rad 384 Well Plate 50 µL, wellName: G3, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 3.78}
- aspirate: {pipetteId: p20_single_gen2, volume: 20, labwareId: Opentrons 10 Tube Rack with Falcon 4x50 mL, 6x15 mL Conical, wellName: A1, wellLocation: {origin: bottom, offset: {z: 2, x: 0, y: 0}}, flowRate: 3.7}
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