opentrons/protocol-designer 8.4.4
schemaVersion: 8
protocolName: Emulsifier Test
author: S Devlin
description: First Test
robot: {model: OT-2 Standard, deckId: ot2_standard}
pipettes:
  p20_single_gen2: {mount: left}
  p300_single_gen2: {mount: right}
labware:
  Opentrons OT-2 96 Tip Rack 20 µL: {labwareDefURI: opentrons/opentrons_96_tiprack_20ul/1, location: 2}
  Opentrons OT-2 96 Tip Rack 300 µL: {labwareDefURI: opentrons/opentrons_96_tiprack_300ul/1, location: 5}
  Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap: {labwareDefURI: opentrons/opentrons_24_tuberack_eppendorf_1.5ml_safelock_snapcap/1, location: 1}
  Thermo Scientific 384 Well Plate 120 µL: {labwareDefURI: custom_beta/thermoscientific_384_wellplate_120ul/1, location: 4}
trashBinLocationUpdate:
  trashBin: cutout12
pipetteTiprackAssignments:
  p20_single_gen2: [opentrons/opentrons_96_tiprack_20ul/1]
  p300_single_gen2: [opentrons/opentrons_96_tiprack_300ul/1]
ingredients:
  - 2.5% Span 80: {description: Oil}
  - Water: {description: Water}
  - 1.25% Span 80
ingredLocations:
  Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap:
    1.25% Span 80 {volume: 1200}: A1
    2.5% Span 80 {volume: 1200}: A2
    Water {volume: 500}: A3
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 40
  path: multiDispense
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A1
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  aspirate_flowRate: 46.4
  aspirate_mmFromBottom: 3
  dispense_labware: Thermo Scientific 384 Well Plate 120 µL
  dispense_wells: C3-E3, C5-E5, C7-E7, C9-E9, C11, D11, C13, D13, C15, D15, C17, D17, C19, D19, C21, D21
  dispense_flowRate: 46.4
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_flowRate: 46.43
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 40
  path: multiDispense
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A2
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  aspirate_flowRate: 46.4
  dispense_labware: Thermo Scientific 384 Well Plate 120 µL
  dispense_wells: C4-E4, C6-E6, C8-E8, C10-E10, C12, D12, C14, D14, C16, D16, C18, D18, C20, D20
  dispense_flowRate: 46.4
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_flowRate: 46.43
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A3
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  aspirate_flowRate: 10
  aspirate_mmFromBottom: 2
  dispense_labware: Thermo Scientific 384 Well Plate 120 µL
  dispense_wells: C3
  dispense_flowRate: 12.5
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 20
  dispense_mmFromBottom: 0.5
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer H₂O
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A3
  aspirate_flowRate: 10
  aspirate_mmFromBottom: 2
  aspirate_delay_seconds: 1
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  dispense_labware: Thermo Scientific 384 Well Plate 120 µL
  dispense_wells: C3
  dispense_flowRate: 20.0
  dispense_mmFromBottom: 0.5
  dispense_delay_seconds: 1
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 20
- stepType: moveLiquid
  stepName: transfer H₂O
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A3
  aspirate_flowRate: 10
  aspirate_mmFromBottom: 2
  aspirate_delay_seconds: 1
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  dispense_labware: Thermo Scientific 384 Well Plate 120 µL
  dispense_wells: C4
  dispense_flowRate: 20.0
  dispense_mmFromBottom: 0.5
  dispense_delay_seconds: 1
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 20
- stepType: moveLiquid
  stepName: transfer H₂O
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A3
  aspirate_flowRate: 10
  aspirate_mmFromBottom: 2
  aspirate_delay_seconds: 1
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  dispense_labware: Thermo Scientific 384 Well Plate 120 µL
  dispense_wells: C5
  dispense_flowRate: 20.0
  dispense_mmFromBottom: 0.1
  dispense_delay_seconds: 1
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 20
- stepType: moveLiquid
  stepName: transfer H₂O
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A3
  aspirate_flowRate: 10
  aspirate_mmFromBottom: 2
  aspirate_delay_seconds: 1
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  dispense_labware: Thermo Scientific 384 Well Plate 120 µL
  dispense_wells: C6
  dispense_flowRate: 20.0
  dispense_mmFromBottom: 0.1
  dispense_delay_seconds: 1
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 20
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- stepType: moveLiquid
  stepName: transfer H₂O
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A3
  aspirate_flowRate: 10
  aspirate_mmFromBottom: 2
  aspirate_delay_seconds: 1
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  dispense_labware: Thermo Scientific 384 Well Plate 120 µL
  dispense_wells: E10
  dispense_flowRate: 20.0
  dispense_mmFromBottom: 0.1
  dispense_delay_seconds: 1
  dispense_mix_checkbox: true
  dispense_mix_times: 15
  dispense_mix_volume: 20
labwareDefinitions:
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  custom_beta/thermoscientific_384_wellplate_120ul/1:
    brand: {brand: Thermo Scientific, brandId: [384 Well, 142761]}
    metadata: {displayName: Thermo Scientific 384 Well Plate 120 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.8, yDimension: 85.5, zDimension: 14.4}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: thermoscientific_384_wellplate_120ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 11.7, totalLiquidVolume: 120, shape: rectangular, xDimension: 3.7, yDimension: 3.7, x: 12.1, y: 76.5, z: 2.7}
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commands:
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- pickUpTip: {pipetteId: p300_single_gen2, labwareId: Opentrons OT-2 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p300_single_gen2, volume: 300, labwareId: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap, wellName: A1, wellLocation: {origin: bottom, offset: {z: 3, x: 0, y: 0}}, flowRate: 46.4}
- dispense: {pipetteId: p300_single_gen2, volume: 40, labwareId: Thermo Scientific 384 Well Plate 120 µL, wellName: C3, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 46.4}
- dispense: {pipetteId: p300_single_gen2, volume: 40, labwareId: Thermo Scientific 384 Well Plate 120 µL, wellName: D3, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 46.4}
- dispense: {pipetteId: p300_single_gen2, volume: 40, labwareId: Thermo Scientific 384 Well Plate 120 µL, wellName: E3, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 46.4}
- dispense: {pipetteId: p300_single_gen2, volume: 40, labwareId: Thermo Scientific 384 Well Plate 120 µL, wellName: C5, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 46.4}
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