opentrons/protocol-designer 8.4.4
schemaVersion: 8
protocolName: Emulsifier Test
author: S Devlin
description: First Test
robot: {model: OT-2 Standard, deckId: ot2_standard}
pipettes:
  p20_single_gen2: {mount: left}
  p300_single_gen2: {mount: right}
labware:
  Opentrons OT-2 96 Tip Rack 20 µL: {labwareDefURI: opentrons/opentrons_96_tiprack_20ul/1, location: 2}
  Opentrons OT-2 96 Tip Rack 300 µL: {labwareDefURI: opentrons/opentrons_96_tiprack_300ul/1, location: 5}
  Thermo Scientific 384 Well Plate 120 µL: {labwareDefURI: custom_beta/thermoscientific_384_wellplate_120ul/1, location: 4}
  Opentrons 10 Tube Rack with NEST 4x50 mL, 6x15 mL Conical: {labwareDefURI: opentrons/opentrons_10_tuberack_nest_4x50ml_6x15ml_conical/1, location: 1}
trashBinLocationUpdate:
  trashBin: cutout12
pipetteTiprackAssignments:
  p20_single_gen2: [opentrons/opentrons_96_tiprack_20ul/1]
  p300_single_gen2: [opentrons/opentrons_96_tiprack_300ul/1]
ingredients:
  - 2.5% Span 80: {description: Oil}
  - Water: {description: Water}
  - 1.25% Span 80
  - 2% Span: {description: Light Mineral Oil + Span 80 (2% by weight)}
ingredLocations:
  Opentrons 10 Tube Rack with NEST 4x50 mL, 6x15 mL Conical:
    2% Span {volume: 5000}: A1
    Water {volume: 3000}: A2
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 40
  path: multiDispense
  changeTip: once
  aspirate_labware: Opentrons 10 Tube Rack with NEST 4x50 mL, 6x15 mL Conical
  aspirate_wells: A1
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  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 100
  aspirate_delay_seconds: 10
  aspirate_flowRate: 5
  aspirate_mmFromBottom: 3
  aspirate_touchTip_checkbox: true
  dispense_labware: Thermo Scientific 384 Well Plate 120 µL
  dispense_wells: ['C3', 'C4', 'C5', 'C6', 'C7', 'C8', 'C9', 'C10', 'C11', 'C12', 'C13', 'C14', 'C15', 'C16', 'C17', 'C18', 'C19', 'C20', 'C21', 'C22', 'D3', 'D4', 'D5', 'D6', 'D7', 'D8', 'D9', 'D10', 'D11', 'D12', 'D13', 'D14', 'D15', 'D16', 'D17', 'D18']
  dispense_delay_checkbox: true
  dispense_delay_mmFromBottom: 10
  dispense_delay_seconds: 5
  dispense_flowRate: 10
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_flowRate: 46.43
  blowout_location: source_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_20ul/1
  volume: 2
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack with NEST 4x50 mL, 6x15 mL Conical
  aspirate_wells: A2
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  aspirate_flowRate: 10
  dispense_labware: Thermo Scientific 384 Well Plate 120 µL
  dispense_wells: ['C3', 'C4', 'C5', 'C6', 'C7', 'C8', 'C9', 'C10', 'C11', 'C12', 'C13', 'C14', 'C15', 'C16', 'C17', 'C18', 'C19', 'C20', 'C21', 'C22', 'D3', 'D4', 'D5', 'D6', 'D7', 'D8', 'D9', 'D10', 'D11', 'D12', 'D13', 'D14', 'D15', 'D16', 'D17', 'D18']
  dispense_flowRate: 10
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 2
  blowout_flowRate: 3.78
  blowout_location: trashBin
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 10
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C3
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  aspirate_flowRate: 46.4
  dispense_flowRate: 50
  mix_mmFromBottom: 0.2
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 10
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C3
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  aspirate_flowRate: 50.0
  dispense_flowRate: 50
  mix_mmFromBottom: 0.2
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 10
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C4
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  aspirate_flowRate: 50.0
  dispense_flowRate: 50.0
  mix_mmFromBottom: 0.8
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 20
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C5
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  aspirate_flowRate: 50.0
  dispense_flowRate: 50.0
  mix_mmFromBottom: 0.2
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 20
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C6
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  aspirate_flowRate: 50.0
  dispense_flowRate: 50.0
  mix_mmFromBottom: 0.8
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 10
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C7
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  aspirate_flowRate: 100.0
  dispense_flowRate: 100.0
  mix_mmFromBottom: 0.2
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 10
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C8
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  aspirate_flowRate: 100.0
  dispense_flowRate: 100.0
  mix_mmFromBottom: 0.8
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 20
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C9
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  aspirate_flowRate: 100.0
  dispense_flowRate: 100.0
  mix_mmFromBottom: 0.2
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 20
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C10
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  aspirate_flowRate: 100.0
  dispense_flowRate: 100.0
  mix_mmFromBottom: 0.8
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 10
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C11
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  aspirate_flowRate: 150.0
  dispense_flowRate: 150.0
  mix_mmFromBottom: 0.2
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 10
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C12
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  aspirate_flowRate: 150.0
  dispense_flowRate: 150.0
  mix_mmFromBottom: 0.8
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 20
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C13
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  aspirate_flowRate: 150.0
  dispense_flowRate: 150.0
  mix_mmFromBottom: 0.2
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 20
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C14
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  aspirate_flowRate: 150.0
  dispense_flowRate: 150.0
  mix_mmFromBottom: 0.8
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 10
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C15
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  aspirate_flowRate: 50.0
  dispense_flowRate: 50.0
  mix_mmFromBottom: 0.2
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 10
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C16
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  aspirate_flowRate: 50.0
  dispense_flowRate: 50.0
  mix_mmFromBottom: 0.8
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 20
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C17
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  aspirate_flowRate: 50.0
  dispense_flowRate: 50.0
  mix_mmFromBottom: 0.2
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 20
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C18
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  aspirate_flowRate: 50.0
  dispense_flowRate: 50.0
  mix_mmFromBottom: 0.8
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 10
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C19
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  aspirate_flowRate: 100.0
  dispense_flowRate: 100.0
  mix_mmFromBottom: 0.2
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 10
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C20
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  aspirate_flowRate: 100.0
  dispense_flowRate: 100.0
  mix_mmFromBottom: 0.8
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 20
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C21
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  aspirate_flowRate: 100.0
  dispense_flowRate: 100.0
  mix_mmFromBottom: 0.2
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 20
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: C22
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  aspirate_flowRate: 100.0
  dispense_flowRate: 100.0
  mix_mmFromBottom: 0.8
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 10
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: D3
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  aspirate_flowRate: 150.0
  dispense_flowRate: 150.0
  mix_mmFromBottom: 0.2
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 10
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: D4
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  aspirate_flowRate: 150.0
  dispense_flowRate: 150.0
  mix_mmFromBottom: 0.8
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 20
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: D5
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  aspirate_flowRate: 150.0
  dispense_flowRate: 150.0
  mix_mmFromBottom: 0.2
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 20
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: D6
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  aspirate_flowRate: 150.0
  dispense_flowRate: 150.0
  mix_mmFromBottom: 0.8
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 10
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: D7
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  aspirate_flowRate: 50.0
  dispense_flowRate: 50.0
  mix_mmFromBottom: 0.2
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 10
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: D8
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  aspirate_flowRate: 50.0
  dispense_flowRate: 50.0
  mix_mmFromBottom: 0.8
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 20
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: D9
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  aspirate_flowRate: 50.0
  dispense_flowRate: 50.0
  mix_mmFromBottom: 0.2
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 20
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: D10
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  aspirate_flowRate: 50.0
  dispense_flowRate: 50.0
  mix_mmFromBottom: 0.8
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 10
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: D11
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  aspirate_flowRate: 100.0
  dispense_flowRate: 100.0
  mix_mmFromBottom: 0.2
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 10
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: D12
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  aspirate_flowRate: 100.0
  dispense_flowRate: 100.0
  mix_mmFromBottom: 0.8
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 20
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: D13
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  aspirate_flowRate: 100.0
  dispense_flowRate: 100.0
  mix_mmFromBottom: 0.2
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 20
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: D14
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  aspirate_flowRate: 100.0
  dispense_flowRate: 100.0
  mix_mmFromBottom: 0.8
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 10
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: D15
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  aspirate_flowRate: 150.0
  dispense_flowRate: 150.0
  mix_mmFromBottom: 0.2
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 10
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: D16
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  aspirate_flowRate: 150.0
  dispense_flowRate: 150.0
  mix_mmFromBottom: 0.8
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 20
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: D17
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  aspirate_flowRate: 150.0
  dispense_flowRate: 150.0
  mix_mmFromBottom: 0.2
  dropTip_location: trashBin
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 30
  times: 20
  changeTip: always
  labware: Thermo Scientific 384 Well Plate 120 µL
  wells: D18
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  aspirate_flowRate: 150.0
  dispense_flowRate: 150.0
  mix_mmFromBottom: 0.8
  dropTip_location: trashBin
labwareDefinitions:
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  custom_beta/thermoscientific_384_wellplate_120ul/1:
    brand: {brand: Thermo Scientific, brandId: [384 Well, 142761]}
    metadata: {displayName: Thermo Scientific 384 Well Plate 120 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.8, yDimension: 85.5, zDimension: 14.4}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: thermoscientific_384_wellplate_120ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 11.7, totalLiquidVolume: 120, shape: rectangular, xDimension: 3.7, yDimension: 3.7, x: 12.1, y: 76.5, z: 2.7}
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commands:
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- pickUpTip: {pipetteId: p300_single_gen2, labwareId: Opentrons OT-2 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p300_single_gen2, volume: 40, labwareId: Opentrons 10 Tube Rack with NEST 4x50 mL, 6x15 mL Conical, wellName: A1, wellLocation: {origin: bottom, offset: {z: 3, x: 0, y: 0}}, flowRate: 5}
- moveToWell: {pipetteId: p300_single_gen2, labwareId: Opentrons 10 Tube Rack with NEST 4x50 mL, 6x15 mL Conical, wellName: A1, wellLocation: {origin: bottom, offset: {x: 0, y: 0, z: 100}}}
- waitForDuration: {seconds: 10}
- touchTip: {pipetteId: p300_single_gen2, labwareId: Opentrons 10 Tube Rack with NEST 4x50 mL, 6x15 mL Conical, wellName: A1, wellLocation: {origin: bottom, offset: {z: 116.8}}}
- dispense: {pipetteId: p300_single_gen2, volume: 40, labwareId: Thermo Scientific 384 Well Plate 120 µL, wellName: C3, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 10}
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